PsychoPy2experiment version="1.80.00"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u'', u'order': u''}
  expName = IAT-1.3
  Units = use prefs
  Screen = 1
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Routines
  Routine Ready1
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take note of the catogories

        Position your index fingers

        Press the space bar to begin
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      text = A=Positive
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_5
      text = L=Negative
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Superloop_code
    CodeComponent code
      Begin Routine:
        #Set stimuli files and labels according to this is the 1st or 2nd time we are here
        testblockfile=testfiles[superloop.thisRepN]
        trainblockfile=trainfiles[superloop.thisRepN]
        trainlabelL=trainlabelsL[superloop.thisRepN]
        trainlabelR=trainlabelsR[superloop.thisRepN]
        testlabelL=testlabelsL[superloop.thisRepN]
        testlabelR=testlabelsR[superloop.thisRepN]
  Routine Keep_in_mind
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Keep in mind:

        1) Labels at the top of the screen indicate which catogory goes with which key.

        2) Each word or image has a correct catogory classification

        3) Keep your index fingers on the A and L keys to enable a rapid response.

        4) The test gives no results if you go slow- please try to go as fast as possible

        Press the space bar to continue
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End_Thanks
    TextComponent text_26
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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      text:
        The End.

        Thank you for your participation.
  Routine Ready5
    TextComponent text_21
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take note of the catogories

        Position your index fingers

        Press the space bar to begin
    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_22
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A= White or
              Positive
    TextComponent text_23
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        L= Black or
             Negative
  Routine Training2
    TextComponent text_9
      text [set every repeat] = $trainlabelL
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_10
      text [set every repeat] = $trainlabelR
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join('stimuli',$TrialImages)
      size = [0.3, 0.3]
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    KeyboardComponent key_resp_7
      correctAns = $CorrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'a','l'
      startVal [time (s)] = 0.0
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  Routine Training1
    TextComponent Positive_label
      text = A=Positive
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Negative_label
      text = L=Negative
      pos = [0.8,0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_3
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join('stimuli',$StimuliImages)
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_2
      correctAns = $CorrAns1
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'a','l',
      startVal [time (s)] = 0.0
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  Routine Non_congruent
    TextComponent text_14
      text [set every repeat] = $testlabelL
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_15
      text [set every repeat] = $testlabelR
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_2
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join('stimuli',$TrialImages)
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_9
      correctAns = $CorrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'a','l',
      startVal [time (s)] = 0.0
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  Routine Ready4
    TextComponent text_16
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take note of the catogories

        Position your index fingers

        Press the space bar to begin
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_17
      text = A=White
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_18
      text = L=Black
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Ready3
    TextComponent text_11
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take note of the catogories

        Position your index fingers

        Press the space bar to begin
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_12
      text [set every repeat] = $testlabelL
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_13
      text [set every repeat] = $testlabelR
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine SetupCode
    CodeComponent code_3
      Begin Experiment:
        #Order is specified by experimenter at start of experiment via dialogue box
        order=int(expInfo['order']) #convert to integer

        #Now counterbalance pro-stereotype vs anti-stereotype IAT blocks

        #Default is pro-stereotypical - "Congruent" first
        trainfiles=['cong_train.xlsx','incong_train.xlsx']
        testfiles=['cong_test.xlsx','incong_test.xlsx']
        trainlabelsL=['A = \nWhite','A = \nBlack']
        trainlabelsR=['L = \nBlack','L = \nWhite']
        testlabelsL=['A = \nWhite or \nPositive','A = \nBlack or \nPositive']
        testlabelsR=['L = \nBlack or \nNegative','L = \nWhite or \nNegative']

        if order==2:
            #Anti-stereotypical - "Incongruent" first
            trainfiles.reverse()
            testfiles.reverse()
            trainlabelsL.reverse()
            trainlabelsR.reverse()
            testlabelsL.reverse()
            testlabelsR.reverse()

        if order is not (1 or 2):
            print "UNRECOGNISED ORDER CODE - please use 1 or 2 only"





        #print "UNRECOGNISED ORDER CODE - please use 1 or 2 only"

        #CREDITS

        '''
        Developed by Robin Scaife on the Leverhulme Trust "Bias and Blame" project 2014
        Additional coding by Tom Stafford with thanks to Lily Fitzgibbon for advice
        '''
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine Congruent
    TextComponent text_24
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A= White or
              Positive
    TextComponent text_25
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        L= Black or
             Negative
    ImageComponent image_5
      startVal [time (s)] = 0.0
      image [set every repeat] = $TrialImages5
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_13
      correctAns = $CorrAns5
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'a','l'
      startVal [time (s)] = 0.0
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  Routine Ready2
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take note of the catogories

        Position your index fingers

        Press the space bar to begin
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_7
      text [set every repeat] = $trainlabelL
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_8
      text [set every repeat] = $trainlabelR
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Re_Training
    TextComponent text_19
      text = A=White
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_20
      text = L=Black
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_4
      startVal [time (s)] = 0.0
      image [set every repeat] = $TrialImages4
      size = [0.3, 0.3]
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    KeyboardComponent key_resp_11
      correctAns = $CorrAns4
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'a','l'
      startVal [time (s)] = 0.0
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  Routine Feedback3
    CodeComponent feedback_msg3
      Begin Experiment:
        msg=""
      Begin Routine:
        if key_resp_9.corr==0:
            msg="oops"
        elif key_resp_9.corr==1:
            msg=""
    TextComponent text_33
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_34
      text [set every repeat] = $testlabelL
      stopVal [duration (s)] = 1
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_35
      text [set every repeat] = $testlabelR
      stopVal [duration (s)] = 1
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Feedback4
    CodeComponent code_6
      Begin Experiment:
        msg=""
      Begin Routine:
        if key_resp_11.corr==0:
            msg="oops"
        elif key_resp_11.corr==1:
            msg=""
    TextComponent text_36
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_37
      text = A=White
      stopVal [duration (s)] = 1
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_38
      text = L=Black
      stopVal [duration (s)] = 1
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Feedback1
    CodeComponent feedback_msg1
      Begin Experiment:
        msg=""
      Begin Routine:
        if key_resp_2.corr==0:
            msg="oops"
        elif key_resp_2.corr==1:
            msg=""
    TextComponent text_27
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_29
      text = A=Positive
      stopVal [duration (s)] = 1
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_30
      text = L=Negative
      stopVal [duration (s)] = 1
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Feedback2
    CodeComponent feedback_msg2
      Begin Experiment:
        msg=""
      Begin Routine:
        if key_resp_7.corr==0:
            msg="oops"
        elif key_resp_7.corr==1:
            msg=""
    TextComponent text_28
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_31
      text [set every repeat] = $trainlabelL
      stopVal [duration (s)] = 1
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_32
      text [set every repeat] = $trainlabelR
      stopVal [duration (s)] = 1
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Feedback5
    CodeComponent code_7
      Begin Experiment:
        msg=""
      Begin Routine:
        if key_resp_13.corr==0:
            msg="oops"
        elif key_resp_13.corr==1:
            msg=""
    TextComponent text_39
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_40
      stopVal [duration (s)] = 1
      pos = [-0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A= White or
              Positive
    TextComponent text_41
      stopVal [duration (s)] = 1
      pos = [0.8, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        L= Black or
             Negative
  Routine Instructions
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will be presented with words or images to classify into catogories using either the 'A' or 'L' key.

        Try to go as fast as possible while making as few mistakes as possible.

        Press the space bar to continue
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine SetupCode
  Routine Instructions
  Routine Keep_in_mind
  Routine Ready1
  LoopInitiator Train_pos_neg loopType="TrialHandler"
    conditionsFile = pos_neg_train.xlsx
    loopType = random
    nReps = 1
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    Routine Training1
    Routine Feedback1
  LoopTerminator Train_pos_neg
  LoopInitiator superloop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine Superloop_code
    Routine Ready2
    LoopInitiator Train_target_stimuli loopType="TrialHandler"
      conditionsFile = $trainblockfile
      loopType = random
      nReps = 1
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      Routine Training2
      Routine Feedback2
    LoopTerminator Train_target_stimuli
    Routine Ready3
    LoopInitiator Test_associations loopType="TrialHandler"
      conditionsFile = $testblockfile
      loopType = random
      nReps = 1
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      Routine Non_congruent
      Routine Feedback3
    LoopTerminator Test_associations
  LoopTerminator superloop
  Routine End_Thanks
